begintemplate Import3d_Section
// primarily for display. Allows gui without instantiating sections
// fid refers to the raw index of the point that id refers to.
// For a root section fid is normally 0. For sections that have
// parents, fid is normally 1 since the first point is often a copy of
// the last point of the parent.
// The variable first=0 means that when diam is shown, there
// should be a glyph drawn defined by raw indices 0 and 1.
// if this is a contour it may also contain a list of contours that
// define a 3-d object
public raw, xyz, d, id, append, g, mkglyph, rotate, type, centroid_color
public wire_color
public iscontour_, pid, parentsec, parentx, volatile, nameindex, first, fid
public contour_list, pl_centroid, pl_diam, pl_diam_mk_stk_triang_vec
public stk_triang_vec, stk_triang_area, is_subsidiary
public volatile2, contourcenter, ztrans, approximate_contour_by_circle
public pl_point, insrt, set_pt, stk_center, accurate_triangle_area
objref raw, xyz, d, g, parentsec, contour_list, this, stk_triang_vec
// processed_contour_center vector introduced because it may differ
// from the raw contour center
public processed_contour_center
objref processed_contour_center

proc init() {
	is_subsidiary = 0
	ztrans = 0
	first = 0
	fid = 0
	nameindex=0
	parentx = 1
	volatile = 0
	volatile2 = 0
	pid = -1
	iscontour_ = 0
	type = 0
	centroid_color = 2
	wire_color = 4
	id = $1
	raw = new Matrix(3, $2)
	xyz = new Matrix(3, $2)
	d = new Vector($2)
}
proc set_pt() {
	raw.x[0][$1] = $2
	raw.x[1][$1] = $3
	raw.x[2][$1] = $4
	d.x[$1] = $5
}

proc append() {local i, j
	for i=0, $3-1 {
		j = $1 + i
		k = $2 + i
		set_pt(j, $o4.x[k], $o5.x[k], $o6.x[k], $o7.x[k])
	}
}

proc insrt() {local i, nr, nc
	nr = raw.nrow  nc = raw.ncol
	d.resize(nc+1)
	raw.resize(nr, nc+1)
	xyz.resize(nr, nc+1)
	for (i=nc-1; i >= $1; i -= 1) {
		raw.setcol(i+1, raw.getcol(i))
		d.x[i+1] = d.x[i]
	}
	set_pt($1, $2, $3, $4, $5)
}

proc pl_centroid() {local i, n
	xyz.getrow(1).line($o1, xyz.getrow(0), centroid_color, 1)
	if (first == 1) {// A wire, rewrite first line segment as green
		if (xyz.ncol() > 1) {
			$o1.beginline(wire_color, 1)
			$o1.line(xyz.x[0][0], xyz.x[1][0])
			$o1.line(xyz.x[0][1], xyz.x[1][1])
		}
	}
	if (iscontour_) {
		n = xyz.ncol - 1
		$o1.beginline(centroid_color, 1)
		$o1.line(xyz.x[0][0], xyz.x[1][0])
		$o1.line(xyz.x[0][n], xyz.x[1][n])
	}
    if (0) {
	if (object_id(contour_list)) {
		for i=0, contour_list.count-1 {
			contour_list.object(i).pl_centroid($o1)
		}
	}
    }
}

proc pl_diam_mk_stk_triang_vec() {
	if (object_id(contour_list)) {
		if (!object_id(contour_list.object(0).stk_triang_vec)) {
			mk_stk_triang_vec(this, contour_list.object(0))
			for i=1, contour_list.count-1 {
				mk_stk_triang_vec(contour_list.object(i-1), contour_list.object(i))
			}
		}
	}	
}

proc pl_diam() {local i
	if (!iscontour_) {
		mkglyph()
		$o1.glyph(g, 0, 0)
	}else{
		if (object_id(contour_list)) {
			pl_diam_mk_stk_triang_vec()
			pl_stk_triang($o1, this, contour_list.object(0))
			for i=1, contour_list.count-1 {
				pl_stk_triang($o1, contour_list.object(i-1), contour_list.object(i))
			}
		}
	}
}

proc pl_point() {local i
	for i=first, xyz.ncol-1 {
		$o1.mark(xyz.x[0][i], xyz.x[1][i], "s", 5, 3, 1)
	}
	if (object_id(parentsec) == 0) {
		$o1.mark(xyz.x[0][0], xyz.x[1][0], "S", 8, 3, 1)
	}
    if (0) {
	if (object_id(contour_list)) {
		for i=0, contour_list.count-1 {
			contour_list.object(i).pl_point($o1)
		}
	}
    }
}

proc mkglyph() {local i, d1, d2   localobj x, y, norm, x1, y1, i1
	g = new Glyph()
	if (xyz.ncol - first < 1) { return }
	// normal
	x1 = xyz.getrow(0)
	y1 = xyz.getrow(1)
	if (xyz.ncol - first == 1) {
		// render as spherical
		g.circle(x1.x[0], y1.x[0], d.x[0]/2)
		g.fill(1)
		return
	}
	// may or may not want to include parent point in glyph
	x = x1.c(first).deriv(1,1)
	y = y1.c(first).deriv(1,1)
	// point separations
	norm = x.c.mul(x).add(y.c.mul(y)).sqrt.mul(2) // d is diam, need radius
	// only want frustra for the non-zero separations
	i1=norm.c.indvwhere("!=", 0)
	if (i1.size == 0) {
//		printf("Section with id=%d has 0 length in this projection\n", id)
		return
	}
	norm.index(norm, i1)
	x.index(x, i1).div(norm)
	y.index(y, i1).div(norm)
	
	// but take care of the possible index offset due to missing parent point
	if (first) { i1.add(first) }
	i1.append(x1.size-1)
	x1.index(x1, i1)
	y1.index(y1, i1)

	for i = 0, x.size-1 {
		d1 = d.x[i1.x[i]]  d2=d.x[i1.x[i]+1]
		g.path()
		g.m(x1.x[i]+y.x[i]*d1, y1.x[i]-x.x[i]*d1)
		g.l(x1.x[i+1]+y.x[i]*d2, y1.x[i+1]-x.x[i]*d2)
		g.l(x1.x[i+1]-y.x[i]*d2, y1.x[i+1]+x.x[i]*d2)
		g.l(x1.x[i]-y.x[i]*d1, y1.x[i]+x.x[i]*d1)
		g.close()
		g.fill(1)
	}
}

proc rotate() {
	$o1.mulm(raw, xyz)
    if (1) {
	if (object_id(contour_list)) {
		for i=0, contour_list.count-1 {
			contour_list.object(i).rotate($o1)
		}
	}
    }
}

// a utility function
obfunc contourcenter() {local i localobj mean, pts, perim, d
	// convert contour defined by $o1, $o2, $o3 vectors to
	// 100 uniform points around perimeter
	// and return the center coordinates as well as the uniform contour
	// vectors (in $o1, $o2, $o3)
	pts = new Matrix(3, $o1.size)
	for i=1,2 { pts.setrow(i-1, $oi) }
	for i=0,2 {pts.setrow(i, pts.getrow(i).append(pts.x[i][0]).deriv(1,1)) }
	perim = new Vector(pts.ncol)
	for i=1, pts.ncol-1 { perim.x[i] = perim.x[i-1] + pts.getcol(i-1).mag }
	d = new Vector(101)
	d.indgen(perim.x[perim.size-1]/100)
	for i=1,3 $oi.interpolate(d, perim)
	mean = new Vector(3)
	for i=1, 3 { mean.x[i-1] = $oi.mean }
	return mean
}

// return center (Vector.size=3) and average diameter in $&1
obfunc approximate_contour_by_circle() {local i,n, perim localobj center, x, y, z
	x=raw.getrow(0)
	y=raw.getrow(1)
	z=raw.getrow(2)	
	perim = 0
	n = x.size
	for i = 0, n-1 {
		perim += edgelen(raw.getcol(i), raw.getcol((i+1)%n))
	}
	center = contourcenter(x, y, z)
	if (0) {
		$&1 = perim/PI
	}else{
		x.sub(center.x[0]).mul(x)
		y.sub(center.x[1]).mul(y)
		z.sub(center.x[2]).mul(z)
//		$&1 = 2*x.add(y).add(z).sqrt.mean
		// average of radius based on perim and mean radius of all points
		$&1 = x.add(y).add(z).sqrt.mean + perim/(2*PI)
	}
//	printf("%g %g %g %g\n", center.x[0], center.x[1], center.x[2], $&1)
//	printf("perimeter approx = %g    actual = %g\n", PI*$&1, perim)
	return center
}

proc mk_stk_triang_vec() {local i, j, n1, n2, d1, d2  localobj i1, i2, trv
	trv = new Vector()
	$o2.stk_triang_vec = trv
	// contour indices are chosen so points 0 cross 1 of a contour from center
	// are in +z direction and points 0 between the two contours are
	// guaranteed to be an edge. An extra index added to end to close the polygon
	// I suppose this could fail if angle does not increase monotonically
	stk_contour_indices($o1, i1, $o1.raw.getcol(0))
	stk_contour_indices($o2, i2, $o1.raw.getcol(0))
	i = 0 j = 0
	n1 = i1.size-1
	n2 = i2.size-1
	while(i < n1 || j < n2) {
		trv.append(i1.x[i], i2.x[j])
	    if (i < n1 && j < n2) {
		// which next one is shorter
		d1 = ($o1.raw.x[0][i1.x[i]] - $o2.raw.x[0][i2.x[j+1]])^2 + ($o1.raw.x[1][i1.x[i]] - $o2.raw.x[1][i2.x[j+1]])^2
		d2 = ($o1.raw.x[0][i1.x[i+1]] - $o2.raw.x[0][i2.x[j]])^2 + ($o1.raw.x[1][i1.x[i+1]] - $o2.raw.x[1][i2.x[j]])^2
		if (d2 < d1) {
			i += 1
		}else{
			j += 1
		}
	    }else{
		if (i < n1) {
			i += 1
		}else{
			j += 1
		}
	    }
	}
	trv.append(i1.x[i], i2.x[j])
}

proc stk_contour_indices() {local i, d, dmin, imin localobj c, x, y, z
	$o2 = new Vector($o1.raw.ncol)
	$o2.indgen()
	// order the points counterclockwise. ie 0 cross 1 in -z direction
	x = $o1.raw.getrow(0)
	y = $o1.raw.getrow(1)
	z = $o1.raw.getrow(2)
	c = contourcenter(x, y, z)
	x = $o1.raw.getcol(0).sub(c)
	y = $o1.raw.getcol(1).sub(c)
	if (x.x[0]*y.x[1] - x.x[1]*y.x[0] > 0) {
		$o2.reverse()
	}

	// which point is closest to $o3
	imin = -1
	dmin = 1e9
	for i=0, $o2.size - 1 {
		d = edgelen($o1.raw.getcol($o2.x[i]), $o3)
		if (d < dmin) {
			dmin = d
			imin = i		
		}
	}
	$o2.rotate(-imin)

	$o2.append($o2.x[0])
}

proc pl_stk_triang() {local i, j  localobj g, m1, m2, trv
	g = $o1
	m1 = $o2.xyz
	m2 = $o3.xyz
	trv = $o3.stk_triang_vec
	for i=0, trv.size-1 {
		g.beginline(centroid_color, 1)
		j = trv.x[i]
		g.line(m1.x[0][j], m1.x[1][j])
		i += 1
		j = trv.x[i]
		g.line(m2.x[0][j], m2.x[1][j])
	}
}

func edgelen() {
	return sqrt($o1.c.sub($o2).sumsq)
}

func stk_triang_area1() {local area, i, i1, i2, j1, j2, a, b, c, na  localobj m1, m2, trv
	area = 0
	m1 = $o1.raw
	m2 = $o2.raw
	trv = $o2.stk_triang_vec
	i1 = trv.x[0]
	i2 = trv.x[1]
	a = edgelen(m1.getcol(i1), m2.getcol(i2))
	na = 0
	for i=2, trv.size-1 {
		j1 = trv.x[i]
		i += 1
		j2 = trv.x[i]
		b = edgelen(m1.getcol(j1), m2.getcol(j2))

		// which contour for side c
		if (i1 == j1) {
			c = edgelen(m2.getcol(i2), m2.getcol(j2))
		}else{
			c = edgelen(m1.getcol(i1), m1.getcol(j1))
		}

		area += accurate_triangle_area(a, b, c)
		na += 1
		i1 = j1
		i2 = j2
		a = b
	}
//printf("stk_triang_area1 na=%d npoints=%d\n", na, m1.ncol+m2.ncol)
	// missing one triangle
	return area
}

func stk_triang_area() {local area, i
	area = stk_triang_area1(this, contour_list.object(0))
	for i=1, contour_list.count-1 {
		area += stk_triang_area1(contour_list.object(i-1), contour_list.object(i))
	}
	return area
}

// the center of the centroid of the contour stack
obfunc stk_center() {local i, len, th  localobj c, centroid, x, y, z, r, lenvec
	centroid = new Matrix(3, 1 + contour_list.count)
	lenvec = new Vector(centroid.ncol)  lenvec.resize(1)
	x = raw.getrow(0)
	y = raw.getrow(1)
	z = raw.getrow(2)
	c = contourcenter(x, y, z)
	centroid.setcol(0, c)
	len = 0
	for i=0, contour_list.count-1 {
		r = contour_list.object(i).raw
		x = r.getrow(0)
		y = r.getrow(1)
		z = r.getrow(2)
		c = contourcenter(x, y, z)
		centroid.setcol(i+1, c)
			
		len += sqrt(c.sub(centroid.getcol(i)).sumsq)
		lenvec.append(len)
	}
	len = len/2
	if (len == 0) {
		c = centroid.getcol(0)
		return c
	}
	i = lenvec.indwhere(">", len)
	th = (len - lenvec.x[i-1])/(lenvec.x[i] - lenvec.x[i-1])
	for j=0, 2 {
		c.x[j] = th*centroid.x[j][i] + (1 - th)*centroid.x[j][i-1]
	}	
	return c
}

func accurate_triangle_area() {local x  localobj a
	// from http://http.cs.berkeley.edu/~wkahan/Triangle.pdf
	// W. Kahan
	x = float_epsilon
	float_epsilon = 0
	a = new Vector(3) a.resize(0)
	a.append($1, $2, $3).sort
	if ((a.x[0] - (a.x[2] - a.x[1])) < 0) {
		float_epsilon = x
		execerror("accurate_triangle_area:","not a triangle")
	}
	float_epsilon = x
	x = .25*sqrt((a.x[2]+(a.x[1]+a.x[0])) * (a.x[0]-(a.x[2]-a.x[1])) \
	  * (a.x[0]+(a.x[2]-a.x[1])) * (a.x[2]+(a.x[1]-a.x[0])))
	return x
}

endtemplate Import3d_Section
