//execute1("celltypes.element(\"Cell\")")

begintemplate Cell
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma
public all

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma

proc topol() { local i
  basic_shape()
}
proc basic_shape() {
  soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(15, 0, 0, 1)}
}

objref all
proc subsets() { local i
  objref all
  all = new SectionList()
    soma all.append()

}
proc geom() {
  forsec all {  /*area = 100 */ L = diam = 5.6419  }
}
external lambda_f
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    insert MCna
      gnabar_MCna = 0.12
      lp_MCna = 1.9
      ml_MCna = 0.75
      nm_MCna = 0.3
  }
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate Cell
